<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Mixer;assembly=Bonsai.Mixer"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateMixerContext">
          <p1:HostApi />
          <p1:DeviceName />
          <p1:SampleRate>48000</p1:SampleRate>
          <p1:ChannelCount xsi:nil="true" />
          <p1:SuggestedLatency xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StartMixer" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSource">
          <p1:Looping>true</p1:Looping>
          <p1:Playing>true</p1:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Background</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSource">
          <p1:Looping>false</p1:Looping>
          <p1:Playing>true</p1:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Foreground</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SampleRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SampleRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>48000</dsp:BufferLength>
          <dsp:Frequency>110</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>48000</dsp:SampleRate>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Amplitude>0.1</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Background</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:AppendBuffer" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Foreground</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SampleRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SampleRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>48000</dsp:BufferLength>
          <dsp:Frequency>660</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>48000</dsp:SampleRate>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Amplitude>0.3</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ReplaceBuffer">
          <p1:FadeDuration>0.02</p1:FadeDuration>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Foreground</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SampleRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SampleRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>48000</dsp:BufferLength>
          <dsp:Frequency>880</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>48000</dsp:SampleRate>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Amplitude>0.3</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ReplaceBuffer">
          <p1:FadeDuration>0.02</p1:FadeDuration>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="17" To="23" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="25" To="31" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>